PsychoPy2experiment version="1.80.06"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = Arguments
  Units = use prefs
  Screen = 1
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Routines
  Routine code2
    CodeComponent read_CSV2
      Begin Routine:
        words = words.replace('"','')
  Routine code
    CodeComponent read_CSV
      Begin Routine:
        argument = argument.replace('"', '')
  Routine end
    TextComponent End
      wrapWidth = 35
      stopVal [duration (s)] = 5
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Thanks for participating!

        Please turn around and tell the experimenter that you have finished!
  Routine next_arg
    TextComponent text_3
      text = Press SPACE when you are ready to read the next argument.
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent Next_Argument
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine question
    TextComponent question_text
      wrapWidth = 35
      text [set every repeat] = $question
      units = cm
      startVal [time (s)] = 0.5
      letterHeight = 1
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    KeyboardComponent rating
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      startVal [time (s)] = 0.5
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  Routine argument
    ImageComponent text_image
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $words
      size = [.25, .125]
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  Routine next_ques
  Routine pause
    TextComponent text_2
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent Instructions
      wrapWidth = 35
      text [set every repeat] = $text
      pos = [0, 5]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent Next_Instr
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Space_Continue
      wrapWidth = 35
      text = Press SPACE to continue
      pos = [0, -7]
      units = cm
      startVal [time (s)] = 0.0
      letterHeight = 1
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    ImageComponent Instr_Pic
      pos [set every repeat] = $pos
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = [0.5, 0.5]
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Flow
  LoopInitiator instr_data loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'text': u'We are piloting a new method for group-grading exam questions. In this first section you will be reading aloud several arguments taken from LAW 204, Written and Oral Advocacy, taught at the UC Berkeley Law School.', u'image': u'nothing.jpg', u'pos': [20, 20]},
      {u'text': u'You will read through student responses taken from the essay portion of the midterm exam. In order to give an objective analysis, you will be asked to read the essay responses aloud. In addition, sentences from each essay response will be presented phrase-by-phrase, not all at once.', u'image': u'nothing.jpg', u'pos': [20, 20]},
      {u'text': u'Handwriting has been cropped and digitized into snippets like the one below, each of which contain individual phrases:', u'image': u'words\\example.jpg', u'pos': [0, 0]},
      {u'text': u'These snippets of text will appear on the screen for only one second each. When each phrase appears please read it out loud.', u'image': u'nothing.jpg', u'pos': [20, 20]},
      {u'text': u'After you have read through each argument, you will be asked several questions about the complete argument. Please try to answer these questions as objectively as possible, as if you were a teaching assistant grading this exam.', u'image': u'nothing.jpg', u'pos': [20, 20]}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
    Routine instructions
  LoopTerminator instr_data
  Routine pause
  LoopInitiator arguments_data loopType="TrialHandler"
    conditionsFile = arguments.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'argument': u'clear_01.csv'},
      {'argument': u'messy_01.csv'}]
    Routine code
    LoopInitiator word_data loopType="TrialHandler"
      conditionsFile = $argument
      loopType = sequential
      nReps = 1
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      Routine code2
      Routine argument
    LoopTerminator word_data
    LoopInitiator questions loopType="TrialHandler"
      conditionsFile = questions.csv
      loopType = random
      nReps = 1
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      Routine question
    LoopTerminator questions
    Routine next_arg
  LoopTerminator arguments_data
  Routine end
