PsychoPy2experiment version="1.81.02"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = srinivasan
  Units = use prefs
  Screen = 1
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Routines
  Routine go
    KeyboardComponent go_forward
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent sentence_stim
      text [set every repeat] = $sentence
      stopVal [duration (s)] = 6
      pos = [0, .1]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent property_stim
      text [set every repeat] = $property
      pos = [0, -.1]
      startVal [time (s)] = 6.5
      letterHeight = 0.1
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    KeyboardComponent true_or_false
      forceEndRoutine = False
      allowedKeys = 'f', 'j'
      startVal [time (s)] = 6.5
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    SoundComponent sound_2
      sound = sound.wav
      stopVal [duration (s)] = 1.0
      startVal [condition] = $playSound == True
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    CodeComponent code
      Begin Experiment:
        playSound = True
      Begin Routine:
        playSound = False
        for item in theseKeys:
            if (item == 'j' and response != 'j') or (item == 'f' and response != 'f'):
                playSound = True
      Each Frame:
        playSound = False
        for item in theseKeys:
            if (item == 'j' and response != 'j') or (item == 'f' and response != 'f'):
                playSound = True
    KeyboardComponent endroutine
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = $true_or_false.status==FINISHED
      store = nothing
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  Routine intro
    TextComponent intro_text
      text [set every repeat] = $text
      pos = [0, .3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      text = Press SPACE to continue!
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent ending
      text = Thanks for participating! Turn around and tell the experimenter that you are finished!
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine pause
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'l'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator instr1 loopType="TrialHandler"
    conditionsFile = instructions-p1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'text': u"Welcome to the study! This lab has been developing a new machine learning algorithm, but we need humans to help confirm that the algorithm's data is correct. Your responses will be used to help us improve our algorithm."},
      {u'text': u'You will be reading sentences and responding to them. A sentence with an underlined word will appear on the screen. When that happens, please fully comprehend the sentence as you read it out loud. After six seconds, the sentence will disappear and a short phrase will appear on the screen. Your job is simply to tell us whether the phrase can be a property of the underlined word.'},
      {u'text': u"If the phrase can be a property of the underlined word, press the green key. And if the phrase can't be a property of the underlined word, press the red key. Please respond as quickly as possible,but avoid making errors."},
      {u'text': u"After this slide you'll begin a practice session. If you make any mistakes an experimenter will be standing by to correct you. Just remember to read all the sentences (but not the phrases) out loud. In order to move between trials in the experiment, press the space bar. When you're ready to begin, please turn around and tell the experimenter."}]
    Routine intro
  LoopTerminator instr1
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = stim-prac.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'property': u'has a smell', u'response': u'j', u'sentence': u'The *skunk* was under a large willow.'},
      {u'property': u'can contain money', u'response': u'j', u'sentence': u'The *bank* was robbed by three bandits.'},
      {u'property': u'has gills', u'response': u'f', u'sentence': u'The *cheese* was growing moldy in the refrigerator.'},
      {u'property': u'can be tied in a knot', u'response': u'f', u'sentence': u'The *refrigerator* was set to a low temperature to cool the beer.'}]
    Routine trial
  LoopTerminator practice
  LoopInitiator instr2 loopType="TrialHandler"
    conditionsFile = instructions-p2.xlsx
    loopType = sequential
    nReps = 1
    conditions = [{u'text': u'That was the practice session. The following session will have exactly the same format, except that you will not be given feedback about whether your answers were correct. When you are ready to begin or have any questions, please turn around and inform the experimenter.'}]
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    Routine intro
  LoopTerminator instr2
  Routine pause
  LoopInitiator test loopType="TrialHandler"
    conditionsFile = stim-test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'property': u'has a smell', u'sentence': u'The skunk was under a large willow.'},
      {u'property': u'can contain money', u'sentence': u'The bank was robbed by three bandits.'},
      {u'property': u'has gills', u'sentence': u'The cheese was growing moldy in the refrigerator.'},
      {u'property': u'can be tied in a knot', u'sentence': u'The refrigerator was set to a low temperature to cool the beer.'}]
    Routine trial
  LoopTerminator test
  Routine end
